PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  colPriority = {'': ''}
  color = $[1,1,1]
  expName = ganzflicker
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    CodeComponent welcome_code
      Code Type = Py
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      Begin JS Experiment:
        title = new visual.TextStim({"win": psychoJS.window, "text": "Welcome to our study!", "height": 0.08, "color": "white", "bold": true, "pos": [0, 0.4], "alignText": "center"});
        body = new visual.TextStim({"win": psychoJS.window, "text": "Thank you for agreeing to participate!\n\nBackground:\nA visual flicker is known to induce \"Ganzfeld imagery\" (Allefeld et al., 2011; Sumich et al., 2018), a type of visual pseudo-hallucination. The continuous flicker facilitates visual imagery, but does not induce any permanent changes in the brain and does not elicit actual hallucinations. We are interested to learn about the types of illusions people experience when viewing continuous flicker.\n\nPress SPACE to continue.", "height": 0.04, "color": "white", "alignText": "left", "anchorHoriz": "left", "wrapWidth": 1.6, "pos": [(- 0.8), 0.1]});
      Begin Routine:
        # Title: large, bold, centered
        title = visual.TextStim(
            win=win,
            text="Welcome to our study!",
            height=0.08,
            color="black",
            bold=True,
            pos=(0, 0.3),
            alignText='center',
        )

        # Body paragraph: left-aligned, smaller font
        body_text = (
            "Thank you for agreeing to participate!\n\n"
            "Background:\n"
            'A visual flicker is known to induce "Ganzfeld imagery" (Allefeld et al., 2011; Sumich et al., 2018), '
            "a type of visual pseudo-hallucination. The continuous flicker facilitates visual imagery, but does not "
            "induce any permanent changes in the brain and does not elicit actual hallucinations. We are interested to "
            "learn about the types of illusions people experience when viewing continuous flicker."
        )

        body = visual.TextStim(
            win=win,
            text=body_text,
            height=0.04,
            color="black",
            bold=False,
            alignText='left',
            anchorHoriz='left',
            wrapWidth=1.6,
            pos=(-0.8, 0.0)
        )

        # "Press SPACE to continue" as a bolded instruction, separated below
        continue_prompt = visual.TextStim(
            win=win,
            text="Press ENTER to continue",
            height=0.045,
            color="black",
            bold=True,
            alignText='center',
            pos=(0, -0.3)
        )
      Each Frame:
        title.draw()
        body.draw()
        continue_prompt.draw()
    KeyboardComponent welcome_key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent setup_code
      Code Type = Py
      Begin Experiment:
        # Measure screen refresh rate at experiment start
        frame_rate = win.getActualFrameRate()
        if frame_rate is None:
            frame_rate = 60  # fallback if detection fails

        expInfo['frameRate'] = frame_rate
        thisExp.addData('Detected_RefreshRate', frame_rate)

        # Just print for debugging/logging (don't calculate flicker timing here)
        print(f"Detected refresh rate: {frame_rate} Hz")
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent instructions_code
      Code Type = Py
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      Begin Routine:
        # Title: large, bold, centered
        title = visual.TextStim(
            win=win,
            text="Instructions",
            height=0.08,
            color="black",
            bold=True,
            pos=(0, 0.3),
            alignText='center',
        )

        # Body paragraph: left-aligned, smaller font
        body_text = (
            "The Ganzflicker is a continuous red and black flicker you will be viewing "
            "while listening to white noise with headphones. The experience will last for ~10 minutes.\n\n"
            "While viewing the flickering screen, please press the SPACEBAR whenever you experience a visual hallucination."
        )

        body = visual.TextStim(
            win=win,
            text=body_text,
            height=0.04,
            color="black",
            bold=False,
            alignText='left',
            anchorHoriz='left',
            wrapWidth=1.6,
            pos=(-0.8, 0.0)
        )

        # "Press SPACE to continue" as a bolded instruction, separated below
        continue_prompt = visual.TextStim(
            win=win,
            text="Press ENTER to continue",
            height=0.045,
            color="black",
            bold=True,
            alignText='center',
            pos=(0, -0.2)
        )
      Each Frame:
        title.draw()
        body.draw()
        continue_prompt.draw()
    KeyboardComponent instructions_key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine flicker
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    PolygonComponent flicker_rect
      fillColor [set every frame] = $flicker_color
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      units = norm
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    CodeComponent flicker_code
      Code Type = Py
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      Begin Routine:
        # Initialize flicker variables
        flicker_color = 'red'  # Initial flicker state
        flicker_freq = 7.5     # Flicker frequency in Hz
        frameN = 0
        frame_count = 0

        # Calculate how many frames per half-cycle (red/black)
        frames_per_half_cycle = round(expInfo['frameRate'] / (2 * flicker_freq))

        # Clear keyboard buffer to prevent carryover keypresses
        event.clearEvents()
        hallucination_key.clearEvents()  # Specifically clear that key component

        # Mark when flicker starts (for logging hallucination timing)
        flicker_start_time = globalClock.getTime()
      Each Frame:
        # Flicker logic
        frameN += 1
        frame_count += 1

        if (frame_count // frames_per_half_cycle) % 2 == 0:
            flicker_color = 'red'
        else:
            flicker_color = 'black'

        # Log hallucination keypresses only
        keys = hallucination_key.getKeys(clear=True)
        for k in keys:
            if k.name == 'escape':
                core.quit()  # Immediately exit if escape is pressed
            elif k.name == 'space':
                thisExp.addData('key', k.name)
                thisExp.addData('press_time', globalClock.getTime())
                thisExp.addData('time_since_flicker_start', globalClock.getTime() - flicker_start_time)
                thisExp.nextEntry()
    SoundComponent white_noise
      saveStartStop = False
      sound [set every repeat] = white_noise.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    KeyboardComponent hallucination_key
      allowedKeys = 'space', 'escape' 
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine warning
    RoutineSettingsComponent warning
      saveStartStop = False
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Main body of text
        warning_intro = visual.TextStim(
            win=win,
            text="If at any time, the Ganzflicker becomes highly unpleasant for you, you are not obligated to continue.",
            height=0.04,
            color="black",
            alignText='left',
            anchorHoriz='left',
            wrapWidth=1.6,
            pos=(-0.8, 0.35)
        )

        # RED warning text
        warning_red = visual.TextStim(
            win=win,
            text="Warning: Do not continue the study if you have photosensitive epilepsy!\nLet the researcher know and we will finish the study here.",
            height=0.045,
            color="red",
            bold=True,
            alignText='left',
            anchorHoriz='left',
            wrapWidth=1.6,
            pos=(-0.8, 0.2)
        )

        # Final instruction
        warning_final = visual.TextStim(
            win=win,
            text='When you press ENTER the Ganzflicker experience will immediately start',
            height=0.04,
            color="black",
            bold=True,
            alignText='left',
            anchorHoriz='left',
            wrapWidth=1.6,
            pos=(-0.8, 0.05)
        )
      Each Frame:
        warning_intro.draw()
        warning_red.draw()
        warning_final.draw()
    KeyboardComponent warning_key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine thanks
    RoutineSettingsComponent thanks
      saveStartStop = False
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    CodeComponent thanks_code
      Code Type = Py
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      Begin Routine:
        thank_you_text = visual.TextStim(
            win=win,
            text="Thank you! I hope you enjoyed your experience.\nWait for the researcher, they should be back in a second.",
            height=0.05,
            color="black",
            bold=False,
            alignText='center',
            anchorHoriz='center',
            wrapWidth=1.6,
            pos=(0, 0)  # centered horizontally and vertically
        )
      Each Frame:
        thank_you_text.draw()
    KeyboardComponent thanks_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine welcome
  Routine instructions
  Routine warning
  Routine flicker
  Routine thanks
